<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome />
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ImportDecoderLibrary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>import sys
import os
sys.path.append(os.getcwd())
sys.path.append(os.path.join(os.getcwd(), ".venv/Scripts"))
from decoder import *</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadDecoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:GetRuntime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>decoder = ClusterlessSpikeDecoder.load("../../../datasets/decoder_data/clusterless_spike_decoder_gpu_int_50Hz.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:GetRuntime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>data = DataLoader.load_clusterless_spike_data()</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>IterateData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" DisplayName="SamplingFrequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:GetRuntime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>iterator = DataIterator(data)</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Eval">
                <py:Expression>iterator.next()</py:Expression>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it[0]</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it[0] as Position, it[1] as Spikes, it[2] as Features, it[3] as Decoding, it[4] as PositionBins)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1000/it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>10</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RunDecoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Features</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>spikes</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Eval">
                <py:Expression>decoder.decode(spikes)</py:Expression>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Posterior" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OnlineDecoderResults</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Data</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OnlinePosterior</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString() == "nan" ? double.NaN : Convert.ToDouble(it.ToString())</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Decoding</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Posterior" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OfflineDecoderResults</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Data</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OfflinePosterior</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PositionBins</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PositionBins" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PositionBins</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PositionBins</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OnlineDecoderResults</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MapEstimate</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Index" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OnlinePositionEstimate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PositionBins</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OfflineDecoderResults</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MapEstimate</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Index" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OfflinePositionEstimate</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="31" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualizeDecoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>PositionEstimates</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Online Prediction</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Offline Acausal Prediction</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>True Position</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OnlinePositionEstimate</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OfflinePositionEstimate</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Position</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="viz:TableLayoutPanelBuilder">
                    <viz:ColumnCount>3</viz:ColumnCount>
                    <viz:RowCount>2</viz:RowCount>
                    <viz:ColumnStyles />
                    <viz:RowStyles>
                      <viz:RowStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Height>10</viz:Height>
                      </viz:RowStyle>
                      <viz:RowStyle>
                        <viz:SizeType>Percent</viz:SizeType>
                        <viz:Height>90</viz:Height>
                      </viz:RowStyle>
                    </viz:RowStyles>
                    <viz:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="12" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source5" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source6" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Posteriors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Online Posterior</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Offline Acausal Posterior</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OnlinePosterior</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OfflinePosterior</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>10</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>90</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="8" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>